// @File(label="Input directory", description="Select the directory with input images", style="directory") inputDir
// @File(label="Forest directory", description="Select the output directory", style="directory") outputDir
// @File(label="Naive directory1", description="Select the output directory", style="directory") outputDir1
// @String(label="Result mode",choices={"Labels","Probabilities"}) resultMode
 
 
import trainableSegmentation.WekaSegmentation;
import ij.io.FileSaver;
import ij.IJ;
import ij.ImagePlus;
 
// starting time
startTime = System.currentTimeMillis();
 
// caculate probabilities?
getProbs = true;
 
// get list of input images
listOfFiles = inputDir.listFiles();
for ( i = 0; i < listOfFiles.length; i++ )
{
    // process only files (do not go into sub-folders)
    if (listOfFiles[ i ].isFile())
    {
        // try to read file as image
        image = new ImagePlus( listOfFiles[i].getCanonicalPath() );
        if( image != null )
        {      

			//create weka segmentator
			seg = new WekaSegmentation(image);

    	seg.loadClassifier("C:/Users/abga577c/Desktop/GitHub/Segmentation/Fiji.app/models/WekaModels/naive.model");
            
        // apply classifier and get results
        seg.applyClassifier( getProbs );
        result = seg.getClassifiedImage();
        
       	// save result as TIFF in output folder
        outputFileName = listOfFiles[ i ].getName().replaceFirst("[.][^.]+$", "") + ".tif";
        new FileSaver( result ).saveAsTiff( outputDir.getPath() + File.separator + outputFileName );
 
        // force garbage collection (important for large images)
         segmentator = null;
         result = null; 
         image = null;
         System.gc();
        }
    }
}

for ( i = 0; i < listOfFiles.length; i++ )
{
    // process only files (do not go into sub-folders)
    if (listOfFiles[ i ].isFile())
    {
        // try to read file as image
        image = new ImagePlus( listOfFiles[i].getCanonicalPath() );
        if( image != null )
        {      

			//create weka segmentator
			seg = new WekaSegmentation(image);

    	seg.loadClassifier("C:/Users/abga577c/Desktop/GitHub/Segmentation/Fiji.app/models/WekaModels/FastRandomForest.model");
            
        // apply classifier and get results
        seg.applyClassifier( getProbs );
        result = seg.getClassifiedImage();
        
       	// save result as TIFF in output folder
        outputFileName = listOfFiles[ i ].getName().replaceFirst("[.][^.]+$", "") + ".tif";
        new FileSaver( result ).saveAsTiff( outputDir1.getPath() + File.separator + outputFileName );
 
        // force garbage collection (important for large images)
         segmentator = null;
         result = null; 
         image = null;
         System.gc();
        }
    }
}


// print elapsed time
estimatedTime = System.currentTimeMillis() - startTime;
IJ.log( "** Finished processing folder in " + estimatedTime + " ms **" );